CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Z_Stack>[0-9]{2})d(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Cell_Line1>[A-Z]{1}[0-9]{4})*.*_T(?P<Time>[0-9]{1,2})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GFP
    Name the primary objects to be identified:Cell
    Typical diameter of objects, in pixel units (Min,Max):20,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Brightfield
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:50
    Feature type:DIC
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    Smoothing scale:2.0
    Shear angle:0.0
    Decay:0.95
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
InvertForPrinting:[module_num:7|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
    Input image type:Grayscale
    Use a red image?:Yes
    Select the red image:EnhanceOrSuppressFeatures
    Use a green image?:Yes
    Select the green image:Brightfield
    Use a blue image?:Yes
    Select the blue image:Brightfield
    Select the color image:Brightfield
    Output image type:Color
    Select "*Yes*" to produce a red image.:No
    Name the red image:InvertedRed
    Select "*Yes*" to produce a green image.:No
    Name the green image:InvertedGreen
    Select "*Yes*" to produce a blue image.:No
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedBrightfield

EnhanceEdges:[module_num:8|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enabled:False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
    Select the input image:InvertedBrightfield
    Name the output image:Edged_Brightfield
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    Select an edge-finding method:Roberts
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Cell
    Calculate the Zernike features?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Bright_Cell
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|G:\\CX5\\1-18-20\\H2009
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cell|Number_Object_Number,Cell|Location_Center_Y,Cell|Location_Center_X,Cell|Location_Center_Z,Cell|AreaShape_Perimeter,Cell|AreaShape_FormFactor,Cell|AreaShape_Solidity,Cell|AreaShape_Center_Y,Cell|AreaShape_Center_X,Cell|AreaShape_Center_Z,Cell|AreaShape_MinFeretDiameter,Cell|AreaShape_MaxFeretDiameter,Cell|AreaShape_EulerNumber,Cell|AreaShape_Zernike_1_1,Cell|AreaShape_Zernike_0_0,Cell|AreaShape_Zernike_3_1,Cell|AreaShape_Zernike_3_3,Cell|AreaShape_Zernike_2_0,Cell|AreaShape_Zernike_2_2,Cell|AreaShape_Zernike_5_1,Cell|AreaShape_Zernike_5_3,Cell|AreaShape_Zernike_5_5,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:Yes
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