CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Z_Stack>[0-9]{2})d(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Brightfield_invert
    Image or measurement?:Image
    Select the first image:Brightfield
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Brightfield_invert
    Name the output image:Brightfield_Enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:DIC
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    Smoothing scale:2.0
    Shear angle:0.0
    Decay:0.95
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DAPI
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Brightfield_Enhanced
    Name the primary objects to be identified:Brightfield_Cell
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.348
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.01,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskObjects:[module_num:9|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enabled:False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
    Select objects to be masked:DNA
    Name the masked objects:Masked_DNA_Brightfield
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Brightfield_Cell
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:10|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enabled:False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
    Parent objects:DNA
    Child objects:Brightfield_Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:DNA_Relate_Brightfield
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
MeasureObjectOverlap:[module_num:11|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enabled:False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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:DNA
    Select the objects to be tested for overlap against the ground truth:Brightfield_Cell
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:DNA

MeasureImageAreaOccupied:[module_num:13|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Brightfield_Cell
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:DNA
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
MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:DNA
    Calculate the Zernike features?:Yes

DisplayPlatemap:[module_num:15|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
    Display object or image measurements?:Object
    Select the object whose measurements will be displayed:DNA
    Select the measurement to plot:Number_Object_Number
    Select your plate metadata:Metadata_Plate
    Multiwell plate format:96
    Select your well metadata:Metadata_Well
    Select your well row metadata:Metadata_WellRow
    Select your well column metadata:Metadata_WellCol
    How should the values be aggregated?:avg
    Enter a title for the plot, if desired:Plate
    Well metadata format:Well name

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|E:\\CX5\\8-25-19\\Seahorse Analyzed
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Metadata_GroupingTags,Image|Count_Brightfield_Cell,Image|Count_DNA,Image|AreaOccupied_Perimeter_Brightfield_Cell,Image|AreaOccupied_Perimeter_DNA,Image|AreaOccupied_AreaOccupied_Brightfield_Cell,Image|AreaOccupied_AreaOccupied_DNA,Image|AreaOccupied_TotalArea_Brightfield_Cell,Image|AreaOccupied_TotalArea_DNA,Image|Width_DAPI,Image|Width_Brightfield,Image|URL_DAPI,Image|URL_Brightfield,Image|Series_DAPI,Image|Series_Brightfield,Image|Frame_DAPI,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Seahorse_Image_082519_
    Overwrite existing files without warning?:Yes
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