CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Z_Stack>[0-9]{2})d(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Mitotrakr
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:PlasmaMembrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

EnhanceEdges:[module_num:5|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
    Select the input image:PlasmaMembrane
    Name the output image:Edged_PM
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceEdges:[module_num:6|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
    Select the input image:Mitotrakr
    Name the output image:Edged_Mito
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:Mitotrakr
    Name the output image:Enhanced_Mitos
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:Edged_Mito
    Name the output image:Total_Mitos
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DAPI
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:DNA
    Name the objects to be identified:Secondary_PM
    Select the method to identify the secondary objects:Propagation
    Select the input image:Edged_PM
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    Regularization factor:0.5
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,0.99
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Total_Mitos
    Name the primary objects to be identified:Mitochondria_Neurite
    Typical diameter of objects, in pixel units (Min,Max):2,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Enhanced_Mitos
    Name the primary objects to be identified:Mitochondria_Speckles
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.01
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Mitochondria_Speckles
    Select objects to measure:Mitochondria_Neurite
    Select objects to measure:DNA
    Calculate the Zernike features?:Yes

MeasureImageIntensity:[module_num:14|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
    Select the image to measure:Mitotrakr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Secondary_PM
    Select the image to measure:DAPI
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:DNA

MeasureObjectIntensity:[module_num:15|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
    Hidden:2
    Select an image to measure:DAPI
    Select an image to measure:Mitotrakr
    Select objects to measure:DNA
    Select objects to measure:Mitochondria_Neurite
    Select objects to measure:Mitochondria_Speckles

RelateObjects:[module_num:16|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
    Parent objects:Secondary_PM
    Child objects:Mitochondria_Speckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|G:\\CX5\\10-2-21
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DNA|Number_Object_Number,DNA|Intensity_StdIntensityEdge_DAPI,DNA|Intensity_StdIntensityEdge_Mitotrakr,DNA|Intensity_MinIntensity_DAPI,DNA|Intensity_MinIntensity_Mitotrakr,DNA|Intensity_IntegratedIntensityEdge_DAPI,DNA|Intensity_IntegratedIntensityEdge_Mitotrakr,DNA|Intensity_StdIntensity_DAPI,DNA|Intensity_StdIntensity_Mitotrakr,DNA|Intensity_UpperQuartileIntensity_DAPI,DNA|Intensity_UpperQuartileIntensity_Mitotrakr,DNA|Intensity_IntegratedIntensity_DAPI,DNA|Intensity_IntegratedIntensity_Mitotrakr,DNA|Intensity_MinIntensityEdge_DAPI,DNA|Intensity_MinIntensityEdge_Mitotrakr,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:18|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
    Store batch files in default output folder?:No
    Output folder path:/gpfs/group/home/thanigan/thanigan/CellProfiler/11-10-21/11-10-21/MitoTrackr_LowConc_508_Antimycin_111021_CP/
    Are the cluster computers running Windows?:No
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    Local root path:/gpfs/group/home/thanigan/thanigan/CellProfiler/11-10-21/11-10-21/MitoTrackr_LowConc_508_Antimycin_111021_CP/
    Cluster root path:/gpfs/group/home/thanigan/thanigan/CellProfiler/11-10-21/11-10-21/MitoTrackr_LowConc_508_Antimycin_111021_CP/
