CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Z_Stack>[0-9]{2})d(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:BrdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:BrdU
    Name the output image:Illumination_Brdu
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:BrdU
    Name the output image:Illum_BrdU
    Select the illumination function:Illumination_Brdu
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DAPI
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Illum_BrdU
    Name the primary objects to be identified:DNA_BrdU
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:DNA
    Calculate the Zernike features?:Yes

MaskObjects:[module_num:10|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
    Select objects to be masked:DNA_BrdU
    Name the masked objects:Masked_BrdU
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DNA
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:11|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
    Hidden:2
    Select an image to measure:DAPI
    Select an image to measure:BrdU
    Select objects to measure:DNA
    Select objects to measure:DNA_BrdU
    Select objects to measure:Masked_BrdU

FilterObjects:[module_num:12|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
    Select the objects to filter:DNA
    Name the output objects:Filtered_DNA
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DAPI
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:2
    Select an image to measure:DAPI
    Select an image to measure:BrdU
    Select objects to measure:Filtered_DNA
    Select objects to measure:DNA_BrdU

ClassifyObjects:[module_num:14|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:DNA
    Select the measurement to classify by:Intensity_IntegratedIntensity_DAPI
    Select bin spacing:Evenly spaced bins
    Number of bins:30
    Lower threshold:35
    Use a bin for objects below the threshold?:No
    Upper threshold:400
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:Yes
    Name the output image:Cell_Cycle
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
RelateObjects:[module_num:15|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
    Parent objects:DNA
    Child objects:DNA_BrdU
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Related_DNA_BrdU
    Parent name:RelateObjects
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

DisplayPlatemap:[module_num:16|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
    Display object or image measurements?:Object
    Select the object whose measurements will be displayed:Filtered_DNA
    Select the measurement to plot:Intensity_MeanIntensity_DAPI
    Select your plate metadata:Metadata_Plate
    Multiwell plate format:96
    Select your well metadata:Metadata_Well
    Select your well row metadata:Metadata_WellRow
    Select your well column metadata:Metadata_WellCol
    How should the values be aggregated?:avg
    Enter a title for the plot, if desired:Plate
    Well metadata format:Well name

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|/gpfs/group/home/thanigan/thanigan/CellProfiler/8-17-20/PC3_LacZC6_ZFHX3C9C10_NoPyruv_8-17-20_CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DNA|Number_Object_Number,DNA|Intensity_MassDisplacement_DAPI,DNA|Intensity_MassDisplacement_BrdU,DNA|Intensity_MinIntensity_DAPI,DNA|Intensity_MinIntensity_BrdU,DNA|Intensity_IntegratedIntensityEdge_DAPI,DNA|Intensity_IntegratedIntensityEdge_BrdU,DNA|Intensity_StdIntensity_DAPI,DNA|Intensity_StdIntensity_BrdU,DNA|Intensity_UpperQuartileIntensity_DAPI,DNA|Intensity_UpperQuartileIntensity_BrdU,DNA|Intensity_MinIntensityEdge_DAPI,DNA|Intensity_MinIntensityEdge_BrdU,DNA|Intensity_MADIntensity_DAPI,DNA|Intensity_MADIntensity_BrdU,DNA|Intensity_IntegratedIntensity_DAPI,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:Overlaid_Nuc
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:DNA

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BrdU
    Name the output image:Overlaid_Brdu
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#DDD804
    Select objects to display:DNA_BrdU

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Brdu
    Select method for constructing file names:From image filename
    Select image name for file prefix:BrdU
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\GitHub\\Hanigan_Nat_2023\\Figure2\\Example_Images_CellCycle
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Nuc
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\GitHub\\Hanigan_Nat_2023\\Figure2\\Example_Images_CellCycle
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:22|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
    Database type:MySQL / CSV
    Database name:DefaultDB
    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    SQL file prefix:SQL_
    Output file location:Elsewhere...|/gpfs/group/home/thanigan/thanigan/CellProfiler/8-17-20/PC3_LacZC6_ZFHX3C9C10_NoPyruv_8-17-20_CP
    Create a CellProfiler Analyst properties file?:No
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:23|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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