CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Z_Stack>[0-9]{2})d(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:BrdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:H2AX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:BrdU
    Name the output image:Illumination_Brdu
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:H2AX
    Name the output image:Illumination_H2AX
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:BrdU
    Name the output image:Illum_BrdU
    Select the illumination function:Illumination_Brdu
    Select how the illumination function is applied:Subtract

CorrectIlluminationApply:[module_num:8|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
    Select the input image:H2AX
    Name the output image:Illum_H2AX
    Select the illumination function:Illumination_H2AX
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DAPI
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Illum_BrdU
    Name the primary objects to be identified:DNA_BrdU
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Illum_H2AX
    Name the primary objects to be identified:H2AX_Puncta
    Typical diameter of objects, in pixel units (Min,Max):1,5
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:DNA
    Select objects to measure:H2AX_Puncta
    Calculate the Zernike features?:Yes

MaskObjects:[module_num:13|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
    Select objects to be masked:DNA_BrdU
    Name the masked objects:Masked_BrdU
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DNA
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:14|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
    Select objects to be masked:H2AX_Puncta
    Name the masked objects:Masked_H2AX_Puncta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DNA
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:15|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:Illum_BrdU
    Select an image to measure:Illum_H2AX
    Select objects to measure:DNA
    Select objects to measure:DNA_BrdU
    Select objects to measure:Masked_BrdU
    Select objects to measure:Masked_H2AX_Puncta

MeasureImageIntensity:[module_num:16|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
    Select the image to measure:Illum_H2AX
    Measure the intensity only from areas enclosed by objects?:No
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
RelateObjects:[module_num:17|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
    Parent objects:DNA
    Child objects:DNA_BrdU
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Related_DNA_BrdU
    Parent name:RelateObjects
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Illum_H2AX
    Name the output image:Overlaid_H2AX
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Masked_H2AX_Puncta

OverlayObjects:[module_num:19|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
    Input:Overlaid_H2AX
    Name the output image:Overlay_Nuc
    Objects:DNA
    Opacity:0.2

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Illum_H2AX
    Name the output image:Overlay_Nuc_Mito
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:H2AX_Puncta
    Select outline color:#0080FF
    Select objects to display:DNA

SaveImages:[module_num:21|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlaid_H2AX
    Select method for constructing file names:From image filename
    Select image name for file prefix:H2AX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlaid_H2AX_Speckle_B
    Saved file format:tiff
    Output file location:Elsewhere...|G:\\CX5\\12-27-20\\CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay_Nuc
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay_Nuc_B
    Saved file format:tiff
    Output file location:Elsewhere...|G:\\CX5\\12-27-20\\CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay_Nuc_Mito
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlaid_Nuc_H2AX_B
    Saved file format:tiff
    Output file location:Elsewhere...|G:\\CX5\\12-27-20\\CellProfiler_Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Illum_H2AX
    Select method for constructing file names:From image filename
    Select image name for file prefix:H2AX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Illum_H2AX_B
    Saved file format:tiff
    Output file location:Elsewhere...|G:\\CX5\\12-27-20\\CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:DAPI_B
    Saved file format:tiff
    Output file location:Elsewhere...|G:\\CX5\\12-27-20\\CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Crop:[module_num:26|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
    Select the input image:Overlay_Nuc_Mito
    Name the output image:Cropped_Nuc_H2AX
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:350,1100
    Top and bottom rectangle positions:850,1600
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    Remove empty rows and columns?:Edges
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:Cropped_Nuc_H2AX
    Select method for constructing file names:From image filename
    Select image name for file prefix:H2AX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cropped_Nuc_H2AX_C
    Saved file format:tiff
    Output file location:Elsewhere...|G:\\CX5\\12-27-20\\CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|/gpfs/group/home/thanigan/thanigan/CellProfiler/12-27-20/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DNA|Number_Object_Number,DNA|Intensity_MassDisplacement_DAPI,DNA|Intensity_MassDisplacement_Illum_H2AX,DNA|Intensity_MassDisplacement_Illum_BrdU,DNA|Intensity_MinIntensity_DAPI,DNA|Intensity_MinIntensity_Illum_BrdU,DNA|Intensity_MinIntensity_Illum_H2AX,DNA|Intensity_IntegratedIntensityEdge_DAPI,DNA|Intensity_IntegratedIntensityEdge_Illum_H2AX,DNA|Intensity_IntegratedIntensityEdge_Illum_BrdU,DNA|Intensity_StdIntensity_DAPI,DNA|Intensity_StdIntensity_Illum_H2AX,DNA|Intensity_StdIntensity_Illum_BrdU,DNA|Intensity_MinIntensityEdge_DAPI,DNA|Intensity_MinIntensityEdge_Illum_H2AX,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:29|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enabled:False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
    Store batch files in default output folder?:No
    Output folder path:/gpfs/group/home/thanigan/thanigan/CellProfiler/1-7-21/
    Are the cluster computers running Windows?:No
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