CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Z_Stack>[0-9]{2})d(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:CldU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:IdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CldU
    Name the primary objects to be identified:CldU_Tracks
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:IdU
    Name the primary objects to be identified:IdU_Tracks
    Typical diameter of objects, in pixel units (Min,Max):2,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.70,1.0
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:CldU_Tracks
    Select objects to measure:IdU_Tracks
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|G:\\Confocal\\880\\Exported_Fibers
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CldU_Tracks|Location_Center_Y,CldU_Tracks|Location_Center_X,CldU_Tracks|Location_Center_Z,CldU_Tracks|Number_Object_Number,CldU_Tracks|AreaShape_Perimeter,CldU_Tracks|AreaShape_FormFactor,CldU_Tracks|AreaShape_Orientation,CldU_Tracks|AreaShape_Center_Y,CldU_Tracks|AreaShape_Center_X,CldU_Tracks|AreaShape_Center_Z,CldU_Tracks|AreaShape_MinFeretDiameter,CldU_Tracks|AreaShape_Solidity,CldU_Tracks|AreaShape_MaxFeretDiameter,CldU_Tracks|AreaShape_EulerNumber,CldU_Tracks|AreaShape_Zernike_1_1,CldU_Tracks|AreaShape_Zernike_0_0,CldU_Tracks|AreaShape_Zernike_3_1,CldU_Tracks|AreaShape_Zernike_3_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:FiberLength_
    Overwrite existing files without warning?:Yes
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